PsychoPy2experiment version="2025.2.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '"001"'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (900, 668)
  expName = eriksen_flankers_replication_Siya_AU2320200
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent Fixation
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        letter_stims = []
      Begin Routine:
        s = float(spacing_deg)
        letters = str(stimulus)

        letter_stims = []

        for i in range(len(letters)):
            x = (i - (len(letters) - 1) / 2) * (0.6 + s)

            stim = visual.TextStim(
                win=win,
                text=letters[i],
                pos=(x, 0),
                units='deg',
                height=1.0,
                color='white'
            )

            letter_stims.append(stim)
      Each Frame:
        if t >= 0.5:
            for stim in letter_stims:
                stim.draw()
    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $correct
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine Introduction
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!


        You will see a group of letters on the screen.
        Identify the letter in the centre and ignore the surrounding letters.


        Press the LEFT arrow for H or K.

        Press the RIGHT arrow for S or C.


        Respond as quickly and accurately as possible.
        The letters will remain on the screen until you respond.



        Press SPACE to begin.
    KeyboardComponent intro_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Introduction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Conditions_1.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'S_Number': 1, 'condition': 'Same as Target', 'spacing': 'Close', 'spacing_deg': 0.06, 'target': 'H', 'stimulus': 'HHHHHHH', 'correct': 'left'},
      {'S_Number': 2, 'condition': 'Same as Target', 'spacing': 'Close', 'spacing_deg': 0.06, 'target': 'K', 'stimulus': 'KKKKKKK', 'correct': 'left'},
      {'S_Number': 3, 'condition': 'Same as Target', 'spacing': 'Close', 'spacing_deg': 0.06, 'target': 'S', 'stimulus': 'SSSSSSS', 'correct': 'right'},
      {'S_Number': 4, 'condition': 'Same as Target', 'spacing': 'Close', 'spacing_deg': 0.06, 'target': 'C', 'stimulus': 'CCCCCCC', 'correct': 'right'},
      {'S_Number': 5, 'condition': 'Same as Target', 'spacing': 'Medium', 'spacing_deg': 0.5, 'target': 'H', 'stimulus': 'HHHHHHH', 'correct': 'left'},
      {'S_Number': 6, 'condition': 'Same as Target', 'spacing': 'Medium', 'spacing_deg': 0.5, 'target': 'K', 'stimulus': 'KKKKKKK', 'correct': 'left'},
      {'S_Number': 7, 'condition': 'Same as Target', 'spacing': 'Medium', 'spacing_deg': 0.5, 'target': 'S', 'stimulus': 'SSSSSSS', 'correct': 'right'},
      {'S_Number': 8, 'condition': 'Same as Target', 'spacing': 'Medium', 'spacing_deg': 0.5, 'target': 'C', 'stimulus': 'CCCCCCC', 'correct': 'right'},
      {'S_Number': 9, 'condition': 'Same as Target', 'spacing': 'Wide', 'spacing_deg': 1, 'target': 'H', 'stimulus': 'HHHHHHH', 'correct': 'left'},
      {'S_Number': 10, 'condition': 'Same as Target', 'spacing': 'Wide', 'spacing_deg': 1, 'target': 'K', 'stimulus': 'KKKKKKK', 'correct': 'left'}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
    Routine trial
  LoopTerminator trials
